PsychoPy2experiment version="1.84.2"
Settings
  Monitor = testMonitor
  color = black
  Experiment info = {u'session': u'001', u'participant': u''}
  Units = pix
  Window size (pixels) = [1440, 900]
  Full-screen window = True
  Show info dlg = False
  expName = connectNodes
  Screen = 1
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Routines
  Routine start
    TextComponent star
      startVal [time (s)] = 0.0
      letterHeight = 50
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      text:
        Now, when you are ready press the space bar to start the experiment
    KeyboardComponent key_resp_4
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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  Routine feeback
    CodeComponent code_7
      Begin Experiment:
        msg = ""
      Begin Routine:
        if resp3.keys == corrAns:
            msg="Fabulous!"
        else:
            msg="Oops, sorry"

        if resp3.keys == corrAns:
            msg="Well done!"
        else:
            msg="Robots also divorce"
    TextComponent feedback
      text [set every repeat] = $msg
      stopVal [duration (s)] = 3
      startVal [time (s)] = 0.0
      letterHeight = 50
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  Routine trial
    KeyboardComponent resp1
      correctAns = $corrAns1
      forceEndRoutine = False
      discard previous = False
      allowedKeys [set every repeat] = 'a','b','c','d'
      startVal [time (s)] = 0
      store = all keys
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    CodeComponent code
      Begin Experiment:
        # Robot Icon from
        # www.iconarchive.com/show/outline-icons-by-iconsmind/Robot-2-icon.html

        #Set size for a node and and offset btw nodes:
        SIZE = (100)
        OF = (15)
        SCREENSIZE = (1440,900)

        LEFTPANEL_SIZE = (800,SCREENSIZE[1])
        LEFTPANEL_LOCATION = (-SCREENSIZE[0]/4-LEFTPANEL_SIZE[0]/2+200, 0)

        # Selection image (with shapes and keys) size is:
        SELIMG = (500,250)
        # For a better fit you can rescale it:
        scaleby = 0.5
        SISIZE = (SELIMG[0]*scaleby, SELIMG[1]*scaleby)

        #Locations:
        #Set up all possible locations for nodes for them to be later
        #recycled. This is for a 5x5 grid:

        # to shift the below grid on x axis adjust this value
        xshift = 250

        # ROW 1 (TOP)
        LOC1 = (-(2*SIZE)-(2*OF) + xshift, 2*SIZE+2*OF)
        LOC2 = (-SIZE-OF + xshift, 2*SIZE+2*OF)
        LOC3 = (0 + xshift, 2*SIZE+2*OF)
        LOC4 = (SIZE+OF + xshift, 2*SIZE+2*OF)
        LOC5 = (2*SIZE+2*OF + xshift, 2*SIZE+2*OF)

        # ROW 2
        LOC6 = (-(2*SIZE)-(2*OF)+xshift, SIZE+OF)
        LOC7 = (-SIZE-OF+xshift, SIZE+OF)
        LOC8 = (0+xshift, SIZE+OF)
        LOC9 = (SIZE+OF+xshift, SIZE+OF)
        LOC10 = (2*SIZE+2*OF+xshift, SIZE+OF)

        # ROW 3
        LOC11 = (-(2*SIZE)-(2*OF)+xshift, 0)
        LOC12 = (-SIZE-OF+xshift, 0)
        LOC13 = (0+xshift, 0)
        LOC14 = (SIZE+OF+xshift, 0)
        LOC15 = (2*SIZE+2*OF+xshift, 0)

        # ROW 4
        LOC16 = (-(2*SIZE)-(2*OF)+xshift, -SIZE-OF)
        LOC17 = (-SIZE-OF+xshift, -SIZE-OF)
        LOC18 = (0+xshift, -SIZE-OF)
        LOC19 = (SIZE+OF+xshift, -SIZE-OF)
        LOC20 = (2*SIZE+2*OF+xshift, -SIZE-OF)

        # ROW 5 (BOTTOM)
        LOC21 = (-(2*SIZE)-(2*OF)+xshift, -(2*SIZE)-(2*OF))
        LOC22 = (-SIZE-OF+xshift, -(2*SIZE)-(2*OF))
        LOC23 = (0+xshift, -(2*SIZE)-(2*OF))
        LOC24 = (SIZE+OF+xshift, -(2*SIZE)-(2*OF))
        LOC25 = (2*SIZE+2*OF+xshift, -(2*SIZE)-(2*OF))

        # Locations of the selection items
        sx = -630
        S1LOC = (sx,0)
        S2LOC = (sx,-120)
        S3LOC = (sx,-240)
        S4LOC = (sx,-360)

        # Locations for selection lables
        stx = -400
        S1TXTLOC = (stx, -80)
        S2TXTLOC = (stx, -200)
        S3TXTLOC = (stx, -320)
        S4TXTLOC = (stx, -440)
      Begin Routine:
        corrAnswer1 = None
        corrAnswer2 = None
        corrAnswer3 = None
        corrAnswer4 = None
      End Routine:
        '''
        At the end of each trial the below code will
        check which keys were pressed in what order
        then from that it constructs the 'correct' values
        what supposed to be pressed in in r1-r4 in the spreadsheet
        '''

        if resp1.keys[0] == r1:
            corrAnswer1 = 1
        else:
            corrAnswer1 = 0

        if resp1.keys[1] == r2:
            corrAnswer2 = 1
        else:
            corrAnswer2 = 0

        if resp1.keys[2] == r3:
            corrAnswer3 = 1
        else:
            corrAnswer3 = 0

        if resp1.keys[3] == r4:
            corrAnswer4 = 1
        else:
            corrAnswer4 = 0

        trials.addData('corrAnsw1',corrAnswer1)
        trials.addData('corrAnsw2',corrAnswer2)
        trials.addData('corrAnsw3',corrAnswer3)
        trials.addData('corrAnsw4',corrAnswer4)
      Each Frame:
        # Depending on how many response participant has made
        # the legend with the keys and shapes will move
        # if subject has made 4 response then the routine will end

        if len(resp1.keys) == 0:
            sloc = S1TXTLOC
        elif len(resp1.keys) == 1:
            # Change the location of the legend after each response
            sloc = S2TXTLOC
        elif len(resp1.keys) == 2:
            sloc = S3TXTLOC
        elif len(resp1.keys) == 3:
            sloc = S4TXTLOC
        elif len(resp1.keys) == 4:
            # If 4 responses have been made - end this routine
            continueRoutine = False
    PolygonComponent whitebackground
      fillColor = $[1,1,1]
      pos = $LEFTPANEL_LOCATION
      lineWidth = 0
      startVal [time (s)] = 0.0
      size = $LEFTPANEL_SIZE
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    ImageComponent robotS
      pos [set every repeat] = $eval(rs)
      startVal [time (s)] = 0.0
      image = robot1.png
      size = $SIZE
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    PolygonComponent node1
      fillColor [set every repeat] = $n1col
      pos [set every repeat] = $eval(n1)
      lineWidth = 0
      startVal [time (s)] = 0.0
      nVertices = 90
      size = $SIZE
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    PolygonComponent node2
      fillColor [set every repeat] = $n2col
      pos [set every repeat] = $eval(n2)
      lineWidth = 0
      startVal [time (s)] = 0.0
      nVertices = 90
      size = $SIZE
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    PolygonComponent node3
      fillColor [set every repeat] = $n3col
      pos [set every repeat] = $eval(n3)
      lineWidth = 0
      startVal [time (s)] = 0.0
      nVertices = 90
      size = $SIZE
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    PolygonComponent node4
      fillColor [set every repeat] = $n4col
      pos [set every repeat] = $eval(n4)
      lineWidth = 0
      startVal [time (s)] = 0.0
      nVertices = 90
      size = $SIZE
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    PolygonComponent node5
      fillColor [set every repeat] = $n5col
      pos [set every repeat] = $eval(n5)
      lineWidth = 0
      startVal [time (s)] = 0.0
      nVertices = 90
      size = $SIZE
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    ImageComponent robotF
      pos [set every repeat] = $eval(re)
      startVal [time (s)] = 0.0
      image = robot1.png
      size = $SIZE
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    PolygonComponent select1
      fillColor = red
      pos = $S1LOC
      lineWidth = 0
      startVal [time (s)] = 0.0
      nVertices = 90
      size = $SIZE
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    PolygonComponent select2
      fillColor = blue
      pos = $S2LOC
      lineWidth = 0
      startVal [time (s)] = 0.0
      nVertices = 90
      size = $SIZE
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    PolygonComponent select3
      fillColor = yellow
      pos = $S3LOC
      lineWidth = 0
      startVal [time (s)] = 0.0
      nVertices = 90
      size = $SIZE
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    PolygonComponent select4
      fillColor = green
      pos = $S4LOC
      lineWidth = 0
      startVal [time (s)] = 0.0
      nVertices = 90
      size = $SIZE
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    ImageComponent selection
      opacity [set every frame] = 1
      pos [set every frame] = $sloc
      units = pix
      startVal [time (s)] = 0.0
      image = mastershapes.png
      size = (500,400)
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    TextComponent sel
      color = black
      pos = (-450, 250)
      startVal [time (s)] = 0.0
      letterHeight = (30)
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      text:
        Press keys A, B, C, D to
        select the shape you associate
        with each colour. Think carefully, you only have one choice!
  Routine intro
    CodeComponent code_6
      Begin Experiment:
        SIZE = (100)
        OF = (15)
        SCREENSIZE = (1440,900)
    TextComponent welcome_2
      text = Welcome!
      stopVal [duration (s)] = 3.0
      startVal [time (s)] = 0.0
      letterHeight = 100
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    TextComponent instruct_2
      stopVal [duration (s)] = 15
      pos [set every repeat] = (0, 150)
      startVal [time (s)] = 3.0
      letterHeight = 50
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      text:
        This task is about reuniting 2 robots together by combining shapes to make a pathway.
    ImageComponent rob0_2
      stopVal [duration (s)] = 12
      pos = (-250, -100)
      startVal [time (s)] = 6.0
      image = robot1.png
      size = 200
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    ImageComponent robb_2
      stopVal [duration (s)] = 12
      pos = (250, -100)
      startVal [time (s)] = 6.0
      image = robot1.png
      size = 200
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    PolygonComponent na_2
      fillColor = blue
      stopVal [duration (s)] = 7.5
      pos [set every repeat] = (-110,-100)
      lineColor = blue
      startVal [time (s)] = 6.5
      nVertices = 90
      size [set every repeat] = $SIZE
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    PolygonComponent nb_2
      fillColor = blue
      stopVal [duration (s)] = 7
      pos [set every repeat] = (0,-100)
      lineColor = blue
      startVal [time (s)] = 7
      nVertices = 90
      size [set every repeat] = $SIZE
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    PolygonComponent nc_2
      fillColor = blue
      stopVal [duration (s)] = 6.5
      pos [set every repeat] = (110,-100)
      lineColor = blue
      startVal [time (s)] = 7.5
      nVertices = 90
      size [set every repeat] = $SIZE
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    PolygonComponent s1_2
      fillColor = black
      stopVal [duration (s)] = 5.5
      pos = (-110, -100)
      lineColor = black
      startVal [time (s)] = 8.5
      size = (110, 40)
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    PolygonComponent s2_2
      fillColor = black
      stopVal [duration (s)] = 4.5
      pos = (0,-100)
      lineColor = black
      startVal [time (s)] = 9.5
      size = (110,40)
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    PolygonComponent s3_2
      fillColor = black
      stopVal [duration (s)] = 3.5
      pos = (110,-100)
      lineColor = black
      startVal [time (s)] = 10.5
      size = (110,40)
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    ImageComponent heart_2
      stopVal [duration (s)] = 4
      pos = (0, -100)
      startVal [time (s)] = 14
      image = heart.png
      size [set every frame] = 200+50*sin(t)
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  Routine Thank_you
    TextComponent thankyou
      stopVal [duration (s)] = 1.0
      startVal [time (s)] = 0.0
      letterHeight = 50
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      text:
        Thank you for your participation.
  Routine Eval
    CodeComponent code_2
      Begin Experiment:
        # ROW 1 (TOP)
        LOC1 = (-(2*SIZE)-(2*OF) + xshift, 2*SIZE+2*OF)
        LOC2 = (-SIZE-OF + xshift, 2*SIZE+2*OF)
        LOC3 = (0 + xshift, 2*SIZE+2*OF)
        LOC4 = (SIZE+OF + xshift, 2*SIZE+2*OF)
        LOC5 = (2*SIZE+2*OF + xshift, 2*SIZE+2*OF)

        # ROW 2
        LOC6 = (-(2*SIZE)-(2*OF)+xshift, SIZE+OF)
        LOC7 = (-SIZE-OF+xshift, SIZE+OF)
        LOC8 = (0+xshift, SIZE+OF)
        LOC9 = (SIZE+OF+xshift, SIZE+OF)
        LOC10 = (2*SIZE+2*OF+xshift, SIZE+OF)

        # ROW 3
        LOC11 = (-(2*SIZE)-(2*OF)+xshift, 0)
        LOC12 = (-SIZE-OF+xshift, 0)
        LOC13 = (0+xshift, 0)
        LOC14 = (SIZE+OF+xshift, 0)
        LOC15 = (2*SIZE+2*OF+xshift, 0)

        # ROW 4
        LOC16 = (-(2*SIZE)-(2*OF)+xshift, -SIZE-OF)
        LOC17 = (-SIZE-OF+xshift, -SIZE-OF)
        LOC18 = (0+xshift, -SIZE-OF)
        LOC19 = (SIZE+OF+xshift, -SIZE-OF)
        LOC20 = (2*SIZE+2*OF+xshift, -SIZE-OF)

        # ROW 5 (BOTTOM)
        LOC21 = (-(2*SIZE)-(2*OF)+xshift, -(2*SIZE)-(2*OF))
        LOC22 = (-SIZE-OF+xshift, -(2*SIZE)-(2*OF))
        LOC23 = (0+xshift, -(2*SIZE)-(2*OF))
        LOC24 = (SIZE+OF+xshift, -(2*SIZE)-(2*OF))
        LOC25 = (2*SIZE+2*OF+xshift, -(2*SIZE)-(2*OF))

        msg = ''
      End Routine:
        if resp3.keys == corrAns:
            msg="Fabulous!"
        else:
            msg="Oops, so sorry"

        if resp3.keys == corrAns:
            msg="Fabulous!"
        else:
            msg="Oops, so sorry"
    TextComponent Evaluation
      pos = (0, 300)
      startVal [time (s)] = 0.0
      letterHeight = 40
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      text:
        Based on what you know, is this pathway correct?
    PolygonComponent polygon
      fillColor [set every repeat] = $n1col
      pos [set every repeat] = $eval(n1)
      startVal [time (s)] = 0.0
      nVertices = 90
      size = (100)
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    PolygonComponent polygon_2
      fillColor [set every repeat] = $n2col
      pos [set every repeat] = $eval(n2)
      startVal [time (s)] = 0.0
      nVertices = 90
      size = 100
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    PolygonComponent polygon_3
      fillColor [set every repeat] = $n3col
      pos [set every repeat] = $eval(n3)
      startVal [time (s)] = 0.0
      nVertices = 90
      size = (100)
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    PolygonComponent polygon_4
      fillColor [set every repeat] = $n4col
      pos [set every repeat] = $eval(n4)
      startVal [time (s)] = 0.0
      nVertices = 90
      size = (100)
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    PolygonComponent polygon_5
      fillColor [set every repeat] = $n5col
      pos [set every repeat] = $eval(n5)
      startVal [time (s)] = 0.0
      nVertices = 90
      size = (100)
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    TextComponent choice
      pos = (0, -300)
      startVal [time (s)] = 0.0
      letterHeight = 50
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      text [set every repeat]:
        Press 'y' for Yes
        Press 'n' for No
    ImageComponent ro
      color [set every repeat] = $[1,1,1]
      pos [set every repeat] = $eval(rs)
      startVal [time (s)] = 0.0
      image = robot1.png
      size = (100)
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    ImageComponent rq
      color [set every repeat] = $[1,1,1]
      pos [set every repeat] = $eval(re)
      startVal [time (s)] = 0.0
      image = robot1.png
      size = (100)
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    KeyboardComponent resp3
      correctAns = $corrAns
      storeCorrect = True
      forceEndRoutine = True
      allowedKeys = 'y','n'
      startVal [time (s)] = 0.5
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  Routine test
    KeyboardComponent resp1_2
      forceEndRoutine = False
      discard previous = False
      allowedKeys = 'a','b','c','d'
      startVal [time (s)] = 0
      store = all keys
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    CodeComponent code_5
      Begin Experiment:
        # Robot Icon from
        # www.iconarchive.com/show/outline-icons-by-iconsmind/Robot-2-icon.html

        #Set size for a node and and offset btw nodes:
        SIZE = (100)
        OF = (15)
        SCREENSIZE = (1440,900)

        LEFTPANEL_SIZE = (800,SCREENSIZE[1])
        LEFTPANEL_LOCATION = (-SCREENSIZE[0]/4-LEFTPANEL_SIZE[0]/2+200, 0)

        # Selection image (with shapes and keys) size is:
        SELIMG = (500,250)
        # For a better fit you can rescale it:
        scaleby = 0.5
        SISIZE = (SELIMG[0]*scaleby, SELIMG[1]*scaleby)

        #Locations:
        #Set up all possible locations for nodes for them to be later
        #recycled. This is for a 5x5 grid:

        # to shift the below grid on x axis adjust this value
        xshift = 250

        # ROW 1 (TOP)
        LOC1 = (-(2*SIZE)-(2*OF) + xshift, 2*SIZE+2*OF)
        LOC2 = (-SIZE-OF + xshift, 2*SIZE+2*OF)
        LOC3 = (0 + xshift, 2*SIZE+2*OF)
        LOC4 = (SIZE+OF + xshift, 2*SIZE+2*OF)
        LOC5 = (2*SIZE+2*OF + xshift, 2*SIZE+2*OF)

        # ROW 2
        LOC6 = (-(2*SIZE)-(2*OF)+xshift, SIZE+OF)
        LOC7 = (-SIZE-OF+xshift, SIZE+OF)
        LOC8 = (0+xshift, SIZE+OF)
        LOC9 = (SIZE+OF+xshift, SIZE+OF)
        LOC10 = (2*SIZE+2*OF+xshift, SIZE+OF)

        # ROW 3
        LOC11 = (-(2*SIZE)-(2*OF)+xshift, 0)
        LOC12 = (-SIZE-OF+xshift, 0)
        LOC13 = (0+xshift, 0)
        LOC14 = (SIZE+OF+xshift, 0)
        LOC15 = (2*SIZE+2*OF+xshift, 0)

        # ROW 4
        LOC16 = (-(2*SIZE)-(2*OF)+xshift, -SIZE-OF)
        LOC17 = (-SIZE-OF+xshift, -SIZE-OF)
        LOC18 = (0+xshift, -SIZE-OF)
        LOC19 = (SIZE+OF+xshift, -SIZE-OF)
        LOC20 = (2*SIZE+2*OF+xshift, -SIZE-OF)

        # ROW 5 (BOTTOM)
        LOC21 = (-(2*SIZE)-(2*OF)+xshift, -(2*SIZE)-(2*OF))
        LOC22 = (-SIZE-OF+xshift, -(2*SIZE)-(2*OF))
        LOC23 = (0+xshift, -(2*SIZE)-(2*OF))
        LOC24 = (SIZE+OF+xshift, -(2*SIZE)-(2*OF))
        LOC25 = (2*SIZE+2*OF+xshift, -(2*SIZE)-(2*OF))

        # Locations of the selection items
        sx = -630
        S1LOC = (sx,0)
        S2LOC = (sx,-120)
        S3LOC = (sx,-240)
        S4LOC = (sx,-360)

        # Locations for selection lables
        stx = -380
        S1TXTLOC = (stx, 0)
        S2TXTLOC = (stx, -140)
        S3TXTLOC = (stx, -260)
        S4TXTLOC = (stx, -380)
      Begin Routine:
        corrAnswer1 = None
        corrAnswer2 = None
        corrAnswer3 = None
        corrAnswer4 = None
      End Routine:
        '''
        At the end of each trial the below code will
        check which keys were pressed in what order
        then from that it constructs the 'correct' values
        what supposed to be pressed in in r1-r4 in the spreadsheet
        '''

        if resp1.keys[0] == r1:
            corrAnswer1 = 1
        else:
            corrAnswer1 = 0

        if resp1.keys[1] == r2:
            corrAnswer2 = 1
        else:
            corrAnswer2 = 0

        if resp1.keys[2] == r3:
            corrAnswer3 = 1
        else:
            corrAnswer3 = 0

        if resp1.keys[3] == r4:
            corrAnswer4 = 1
        else:
            corrAnswer4 = 0

        trials.addData('corrAnsw1',corrAnswer1)
        trials.addData('corrAnsw2',corrAnswer2)
        trials.addData('corrAnsw3',corrAnswer3)
        trials.addData('corrAnsw4',corrAnswer4)
      Each Frame:
        # Depending on how many response participant has made
        # the legend with the keys and shapes will move
        # if subject has made 4 response then the routine will end

        if len(resp1.keys) == 0:
            sloc = S1TXTLOC
        elif len(resp1.keys) == 1:
            # Change the location of the legend after each response
            sloc = S2TXTLOC
        elif len(resp1.keys) == 2:
            sloc = S3TXTLOC
        elif len(resp1.keys) == 3:
            sloc = S4TXTLOC
        elif len(resp1.keys) == 4:
            # If 4 responses have been made - end this routine
            continueRoutine = False
    PolygonComponent whitebackground_2
      fillColor = $[1,1,1]
      pos = $LEFTPANEL_LOCATION
      lineWidth = 0
      startVal [time (s)] = 0.0
      size = $LEFTPANEL_SIZE
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    ImageComponent robotS_2
      pos [set every repeat] = $eval(rs)
      startVal [time (s)] = 0.0
      image = robot1.png
      size = $SIZE
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    PolygonComponent node1_2
      fillColor [set every repeat] = $n1col
      pos [set every repeat] = $eval(n1)
      lineWidth = 0
      startVal [time (s)] = 0.0
      nVertices = 90
      size = $SIZE
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    PolygonComponent node2_2
      fillColor [set every repeat] = $n2col
      pos [set every repeat] = $eval(n2)
      lineWidth = 0
      startVal [time (s)] = 0.0
      nVertices = 90
      size = $SIZE
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    PolygonComponent node3_2
      fillColor [set every repeat] = $n3col
      pos [set every repeat] = $eval(n3)
      lineWidth = 0
      startVal [time (s)] = 0.0
      nVertices = 90
      size = $SIZE
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    PolygonComponent node4_2
      fillColor [set every repeat] = $n4col
      pos [set every repeat] = $eval(n4)
      lineWidth = 0
      startVal [time (s)] = 0.0
      nVertices = 90
      size = $SIZE
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    PolygonComponent node5_2
      fillColor [set every repeat] = $n5col
      pos [set every repeat] = $eval(n5)
      lineWidth = 0
      startVal [time (s)] = 0.0
      nVertices = 90
      size = $SIZE
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    ImageComponent robotF_2
      pos [set every repeat] = $eval(re)
      startVal [time (s)] = 0.0
      image = robot1.png
      size = $SIZE
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    PolygonComponent select1_2
      fillColor = red
      pos = $S1LOC
      lineWidth = 0
      startVal [time (s)] = 0.0
      nVertices = 90
      size = $SIZE
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    PolygonComponent select2_2
      fillColor = blue
      pos = $S2LOC
      lineWidth = 0
      startVal [time (s)] = 0.0
      nVertices = 90
      size = $SIZE
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    PolygonComponent select3_2
      fillColor = yellow
      pos = $S3LOC
      lineWidth = 0
      startVal [time (s)] = 0.0
      nVertices = 90
      size = $SIZE
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    PolygonComponent select4_2
      fillColor = green
      pos = $S4LOC
      lineWidth = 0
      startVal [time (s)] = 0.0
      nVertices = 90
      size = $SIZE
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    ImageComponent selection_2
      opacity [set every frame] = 1
      pos [set every frame] = $sloc
      units = pix
      startVal [time (s)] = 0.0
      image = mastershapes.png
      size = (500,400)
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    ImageComponent master_2
      pos = (-510,90)
      startVal [time (s)] = 0.0
      image = mastershapes.png
      size = (500,400)
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    TextComponent sel_2
      color = black
      pos = (-450, 300)
      startVal [time (s)] = 0.0
      letterHeight = (30)
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      text:
        Press keys a, b, c, d to
        select the shape you associate
        with each colour
  Routine example
    CodeComponent code_3
      Begin Experiment:
        SIZE = (100)
        OF = (15)
        SCREENSIZE = (1440,900)

        xshift = 250

        # ROW 1 (TOP)
        LOC1 = (-(2*SIZE)-(2*OF) + xshift, 2*SIZE+2*OF)
        LOC2 = (-SIZE-OF + xshift, 2*SIZE+2*OF)
        LOC3 = (0 + xshift, 2*SIZE+2*OF)
        LOC4 = (SIZE+OF + xshift, 2*SIZE+2*OF)
        LOC5 = (2*SIZE+2*OF + xshift, 2*SIZE+2*OF)

        # ROW 2
        LOC6 = (-(2*SIZE)-(2*OF)+xshift, SIZE+OF)
        LOC7 = (-SIZE-OF+xshift, SIZE+OF)
        LOC8 = (0+xshift, SIZE+OF)
        LOC9 = (SIZE+OF+xshift, SIZE+OF)
        LOC10 = (2*SIZE+2*OF+xshift, SIZE+OF)

        # ROW 3
        LOC11 = (-(2*SIZE)-(2*OF)+xshift, 0)
        LOC12 = (-SIZE-OF+xshift, 0)
        LOC13 = (0+xshift, 0)
        LOC14 = (SIZE+OF+xshift, 0)
        LOC15 = (2*SIZE+2*OF+xshift, 0)

        # ROW 4
        LOC16 = (-(2*SIZE)-(2*OF)+xshift, -SIZE-OF)
        LOC17 = (-SIZE-OF+xshift, -SIZE-OF)
        LOC18 = (0+xshift, -SIZE-OF)
        LOC19 = (SIZE+OF+xshift, -SIZE-OF)
        LOC20 = (2*SIZE+2*OF+xshift, -SIZE-OF)

        # ROW 5 (BOTTOM)
        LOC21 = (-(2*SIZE)-(2*OF)+xshift, -(2*SIZE)-(2*OF))
        LOC22 = (-SIZE-OF+xshift, -(2*SIZE)-(2*OF))
        LOC23 = (0+xshift, -(2*SIZE)-(2*OF))
        LOC24 = (SIZE+OF+xshift, -(2*SIZE)-(2*OF))
        LOC25 = (2*SIZE+2*OF+xshift, -(2*SIZE)-(2*OF))
    TextComponent text_2
      text = Let's take an example
      pos [set every repeat] = (-300, 300)
      startVal [time (s)] = 0.0
      letterHeight = 40
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    PolygonComponent nod1
      fillColor [set every repeat] = red
      pos [set every repeat] = $LOC11
      lineColor = red
      startVal [time (s)] = 0.0
      nVertices = 90
      size = $SIZE
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    PolygonComponent nod2
      fillColor [set every repeat] = yellow
      pos [set every repeat] = $LOC6
      lineColor [set every repeat] = yellow
      startVal [time (s)] = 0.0
      nVertices = 90
      size = $SIZE
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    PolygonComponent nod3
      fillColor [set every repeat] = blue
      pos = $LOC7
      lineColor [set every repeat] = blue
      startVal [time (s)] = 0.0
      nVertices = 90
      size = $SIZE
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    PolygonComponent nod4
      fillColor [set every repeat] = blue
      pos = $LOC8
      lineColor [set every repeat] = blue
      startVal [time (s)] = 0.0
      nVertices = 90
      size = $SIZE
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    ImageComponent rob1
      pos = $LOC16
      ori [set every repeat] = 0
      startVal [time (s)] = 0.0
      image = robot1.png
      size = $SIZE
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    ImageComponent rob2
      pos = $LOC9
      startVal [time (s)] = 0.0
      image [set every repeat] = robot1.png
      size = $SIZE
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    KeyboardComponent key_resp_2
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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    PolygonComponent sh1
      fillColor = black
      pos = $LOC11
      lineColor = black
      startVal [time (s)] = 2.0
      size [set every repeat] = (40,110)
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    PolygonComponent sh2a
      fillColor = black
      pos = (50,113)
      lineColor = black
      startVal [time (s)] = 2.5
      size = (60, 40)
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    PolygonComponent sh2b
      fillColor = black
      pos = (22, 93)
      lineColor = black
      startVal [time (s)] = 2.5
      size = (40, 80)
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    PolygonComponent sh3
      fillColor = black
      pos = $LOC7
      lineColor = black
      startVal [time (s)] = 3.0
      size = (110, 40)
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    PolygonComponent sh4
      fillColor = black
      pos = $LOC8
      lineColor = black
      startVal [time (s)] = 3.5
      size = (110, 40)
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  Routine Instructions
    CodeComponent code_4
      Begin Experiment:
        SIZE = (100)
        OF = (15)
        SCREENSIZE = (1440,900)
    TextComponent welcome
      text = Welcome!
      stopVal [duration (s)] = 3.0
      startVal [time (s)] = 0.0
      letterHeight = 100
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    TextComponent instruct
      stopVal [duration (s)] = 15
      pos [set every repeat] = (0, 150)
      startVal [time (s)] = 3.0
      letterHeight = 50
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      text:
        This task is about reuniting 2 robots together by combining shapes to make a pathway.
    ImageComponent rob0
      stopVal [duration (s)] = 12
      pos = (-250, -100)
      startVal [time (s)] = 6.0
      image = robot1.png
      size = 200
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    ImageComponent robb
      stopVal [duration (s)] = 12
      pos = (250, -100)
      startVal [time (s)] = 6.0
      image = robot1.png
      size = 200
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    PolygonComponent na
      fillColor = blue
      stopVal [duration (s)] = 7.5
      pos [set every repeat] = (-110,-100)
      lineColor = blue
      startVal [time (s)] = 6.5
      nVertices = 90
      size [set every repeat] = $SIZE
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    PolygonComponent nb
      fillColor = blue
      stopVal [duration (s)] = 7
      pos [set every repeat] = (0,-100)
      lineColor = blue
      startVal [time (s)] = 7
      nVertices = 90
      size [set every repeat] = $SIZE
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    PolygonComponent nc
      fillColor = blue
      stopVal [duration (s)] = 6.5
      pos [set every repeat] = (110,-100)
      lineColor = blue
      startVal [time (s)] = 7.5
      nVertices = 90
      size [set every repeat] = $SIZE
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    PolygonComponent s1
      fillColor = black
      stopVal [duration (s)] = 5.5
      pos = (-110, -100)
      lineColor = black
      startVal [time (s)] = 8.5
      size = (110, 40)
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    PolygonComponent s2
      fillColor = black
      stopVal [duration (s)] = 4.5
      pos = (0,-100)
      lineColor = black
      startVal [time (s)] = 9.5
      size = (110,40)
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    PolygonComponent s3
      fillColor = black
      stopVal [duration (s)] = 3.5
      pos = (110,-100)
      lineColor = black
      startVal [time (s)] = 10.5
      size = (110,40)
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    ImageComponent heart
      stopVal [duration (s)] = 4
      pos = (0, -100)
      startVal [time (s)] = 14
      image = heart.png
      size [set every frame] = 200+50*sin(t)
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Flow
  Routine Instructions
  Routine example
  Routine start
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = designs.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{u'r4': u'd', u'n1col': u'blue', u'n2col': u'blue', u'n4col': u'red', u'r2': u'b', u'rs': u'LOC21', u'r3': u'c', u'n3col': u'green', u're': u'LOC9', u'corrAns': u'a', u'n5col': u'red', u'n1': u'LOC22', u'n2': u'LOC23', u'n3': u'LOC24', u'n4': u'LOC19', u'n5': u'LOC14', u'r1': u'a'},
      {u'r4': u'd', u'n1col': u'red', u'n2col': u'yellow', u'n4col': u'green', u'r2': u'b', u'rs': u'LOC21', u'r3': u'c', u'n3col': u'blue', u're': u'LOC3', u'corrAns': u'b', u'n5col': u'red', u'n1': u'LOC16', u'n2': u'LOC11', u'n3': u'LOC12', u'n4': u'LOC13', u'n5': u'LOC8', u'r1': u'a'},
      {u'r4': u'd', u'n1col': u'red', u'n2col': u'red', u'n4col': u'blue', u'r2': u'b', u'rs': u'LOC22', u'r3': u'c', u'n3col': u'yellow', u're': u'LOC10', u'corrAns': u'c', u'n5col': u'blue', u'n1': u'LOC17', u'n2': u'LOC12', u'n3': u'LOC7', u'n4': u'LOC8', u'n5': u'LOC9', u'r1': u'a'},
      {u'r4': u'd', u'n1col': u'green', u'n2col': u'yellow', u'n4col': u'yellow', u'r2': u'b', u'rs': u'LOC16', u'r3': u'c', u'n3col': u'green', u're': u'LOC10', u'corrAns': u'd', u'n5col': u'blue', u'n1': u'LOC17', u'n2': u'LOC12', u'n3': u'LOC13', u'n4': u'LOC8', u'n5': u'LOC9', u'r1': u'a'}]
    Routine trial
  LoopTerminator trials
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = designs1.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{u'n2col': u'yellow', u'n4col': u'yellow', u'n3col': u'green', u'corrAns': u'y', u'n1col': u'green', u'rs': u'LOC16', u're': u'LOC10', u'n5col': u'blue', u'n1': u'LOC17', u'n2': u'LOC12', u'n3': u'LOC13', u'n4': u'LOC8', u'n5': u'LOC9'},
      {u'n2col': u'yellow', u'n4col': u'yellow', u'n3col': u'red', u'corrAns': u'n', u'n1col': u'blue', u'rs': u'LOC16', u're': u'LOC10', u'n5col': u'blue', u'n1': u'LOC17', u'n2': u'LOC12', u'n3': u'LOC13', u'n4': u'LOC8', u'n5': u'LOC9'}]
    Routine Eval
    Routine feeback
  LoopTerminator trials_2
  Routine Thank_you
